CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "cyc001_reg001_CH1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "label.")
    Name to assign these images:DAPIMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc008_reg001_CH4")
    Name to assign these images:S100B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc009_reg001_CH4")
    Name to assign these images:HSP90B1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc010_reg001_CH4")
    Name to assign these images:NPPA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc011_reg001_CH4")
    Name to assign these images:WT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc012_reg001_CH4")
    Name to assign these images:EmptyCyc012
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc013_reg001_CH4")
    Name to assign these images:CTNNB1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cyc014_reg001_CH4")
    Name to assign these images:blank2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Load segmented nuclei with StarDist and convert to objects.']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
    Select the input image:DAPIMask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:6|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notes:['Remove nuclei touching the image border.']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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a seperate set?:No
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
MedianFilter:[module_num:7|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notes:['Apply median filter on membrane stain.']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
    Select the input image:CTNNB1
    Name the output image:MedianFilter
    Window:3

ErodeImage:[module_num:8|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notes:['Erode median filtered membrane stain.']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
    Select the input image:MedianFilter
    Name the output image:ErodeImage
    Structuring element:disk,1

IdentifySecondaryObjects:[module_num:9|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notes:['Identify membranes from segmented nuclei.']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
    Select the input objects:FilterObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:ErodeImage
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:60
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:1
    Thresholding method:Robust Background

IdentifyTertiaryObjects:[module_num:10|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notes:['Identify cytoplasm.']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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:FilterObjects
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:11|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notes:['Measure fluorophore intensities of each identified object.']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
    Select images to measure:CTNNB1, DAPI, EmptyCyc012, HSP90B1, NPPA, S100B, WT1, blank2
    Select objects to measure:Cytoplasm, FilterObjects, IdentifySecondaryObjects

MeasureObjectSizeShape:[module_num:12|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notes:['Measure the size of each identified object.']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
    Select object sets to measure:Cytoplasm, FilterObjects, IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:13|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notes:['Measure granularity of each object.']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
    Select images to measure:DAPI
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm, FilterObjects, IdentifySecondaryObjects
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:14|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notes:['Measure texture of each object.']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enabled:False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
    Select images to measure:ACTA1, CNP, CTNNB1, DAPI, EPCAM, EmptyCyc006, EmptyCyc012, FABP5, GRHL2, HSP90B1, NPPA, S100B, WT1, blank1, blank2
    Select objects to measure:Cytoplasm, FilterObjects, IdentifySecondaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:15|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notes:['Export measurements to .csv file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifySecondaryObjects|Location_MaxIntensity_X_S100B,IdentifySecondaryObjects|Location_MaxIntensity_X_NPPA,IdentifySecondaryObjects|Location_MaxIntensity_X_DAPI,IdentifySecondaryObjects|Location_MaxIntensity_X_EmptyCyc012,IdentifySecondaryObjects|Location_MaxIntensity_X_blank2,IdentifySecondaryObjects|Location_MaxIntensity_X_HSP90B1,IdentifySecondaryObjects|Location_MaxIntensity_X_CTNNB1,IdentifySecondaryObjects|Location_MaxIntensity_X_WT1,IdentifySecondaryObjects|Location_MaxIntensity_Y_S100B,IdentifySecondaryObjects|Location_MaxIntensity_Y_blank2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:5pcwCH4_2
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:16|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notes:['Convert identified nuclei to image.']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enabled:False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
    Select the input objects:FilterObjects
    Name the output image:Nuelci_Objects
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:17|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notes:['Convert identified membrane segmented cells to image.']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enabled:False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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:Membrane_Objects
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:18|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notes:['Convert identified cytoplasm to image.']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enabled:False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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm_Objects
    Select the color format:uint16
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
OverlayOutlines:[module_num:19|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notes:['Produce segmentation outlines for nuclei.']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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:FilterObjects

OverlayOutlines:[module_num:20|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notes:['Produce segmentation outlines for membranes']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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay2
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IdentifySecondaryObjects

OverlayOutlines:[module_num:21|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notes:['Produce segmentation outlines for cytoplasm.']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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay3
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cytoplasm

SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:Single name
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    Enter single file name:Nuelci Segmentation
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:Single name
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    Enter single file name:Membrane Segmentation
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay3
    Select method for constructing file names:Single name
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    Enter single file name:Cytoplasm Segmentation
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Nuelci_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Nuclei Objects
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Membrane_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Membrane Objects
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Objects
    Select method for constructing file names:Single name
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    Enter single file name:Cytoplasm Objects
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\matti\\Documents\\KTH\\BB200X Degree Project in Biotechnology, Second Cycle\\Image Processing\\20220420_CODEX_fetalheart_5pcw\\Image Processing
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
